PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = eyetracker
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextComponent instrukcja
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Cześć,
        dziękujemy, że zgodziłaś/eś się wziąć udział w badaniu. Jesteśmy zespołem naukowców i naukowczyń z Instytutu Studiów Społecznych im. prof. Roberta Zajonca na Uniwersytecie Warszawskim i prowadzimy badania nad decyzjami konsumenckimi.
        Przechodząc dalej wyrażasz zgodę na udział w badaniu. Będzie ono trwało około 10 minut i składało się z dwóch części. Podczas trwania całego badania będziemy monitorować ruchy Twoich gałek ocznych. Sposób zbierania tych danych nie tworzy zagrożenia dla Twojego wzroku, ani innych ryzyk zdrowotnych. Gdybyś jednak poczuł/a się źle, poinformuj o tym badacza lub badaczkę. Pamiętaj, że w każdej chwili masz prawo zrezygnować z udziału z badania bez podania przyczyny.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine trial
